#pragma once
#include "HSLExtensions\\Array2D.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLUtilLib2.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace DECKLOADINGVCURRENT {
  global variable SizeX100_1;
  global variable SizeX100_2;
  global variable Carrier5_Pos1;
  global variable Carrier5_Pos2;
  global variable Carrier5_Pos3;
  global variable Carrier5_Pos4;
  global variable Carrier35_Pos3;
  global variable Carrier35_Pos4;
  global variable Carrier35_Pos5;
  function DoDeckLoading(  ) void ;
  function _InitLibrary() {
    LABWARE::_InitLibrary();
    PIPETTE::_InitLibrary();
    COMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    LABWARE::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    COMMANDS::_ExitLibrary();
  }

  function DoDeckLoading(  ) void {
    private dialog customDialog_1;
    private variable CT;
    private variable Len;
    private variable RR;
    private variable Sets;
    private variable Tip50;
    private variable PlateName;
    private variable TipSlim300;
    private variable Plate;
    private variable NumLabware;
    private variable Counter;
    private variable Loading;
    private variable Volume;
    private variable FT_Ambient;
    private variable Tip300;
    private variable Count;
    private variable FT_Cold;
    private variable EvalExpression;
    private variable Tip1000;
    private variable FindVal;
    private variable PlateList[];
    private variable Types[];
    private variable VolumeList[];
    private variable PlateNameList[];
    private variable LoadingList[];
    private variable Volumes[];
    private variable UsedTipsDict[];
    private variable DesaltingArray[];
    private variable IsUsedArray[];
    private variable MagneticRack;
    Carrier5_Pos1 = 0;
    Carrier5_Pos2 = 0;
    Carrier5_Pos3 = 0;
    Carrier5_Pos4 = 0;
    Carrier35_Pos3 = 0;
    Carrier35_Pos4 = 0;
    Carrier35_Pos5 = 0;
    MagneticRack = 0;
    FT_Cold = Translate("");
    FT_Ambient = Translate("");
    CT = Translate("");
    RR = Translate("");
    PIPETTE::GetNumUsedTips(UsedTipsDict);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("NTR50"), Tip50);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("NTR300"), Tip300);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("FTR300"), TipSlim300);
    COMMANDS::GetDictionaryItem(UsedTipsDict, Translate("FTR1000"), Tip1000);
    LABWARE::GetPlateNames(PlateList);
    LABWARE::GetPlateLoadingLocation(PlateList, LoadingList);
    LABWARE::GetPlateVolume(PlateList, VolumeList);
    LABWARE::GetPlateLabwareName(PlateList, PlateNameList);
    NumLabware=PlateList.GetSize();
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        Loading=LoadingList.GetAt(Counter-1);
        if (Loading != "")
        {
          Plate=PlateList.GetAt(Counter-1);
          PlateName=PlateNameList.GetAt(Counter-1);
          Volume=VolumeList.GetAt(Counter-1);
          FindVal = StrFind(Loading, Translate("Carrier"));
          if (FindVal != -1)
          {
            EvalExpression = StrConcat8(Loading, Translate(" = "), Translate("\""), Plate, Translate(":                                           "), Translate(""), PlateName, Translate("\""));
            StrEvaluateExpr(EvalExpression);
          }
          else
          {
            FindVal = StrFind(Loading, Translate("C"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              CT = StrConcat2(CT, EvalExpression);
            }
            FindVal = StrFind(Loading, Translate("R"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              RR = StrConcat2(RR, EvalExpression);
            }
            FindVal = StrFind(Loading, Translate("F"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              FT_Ambient = StrConcat2(FT_Ambient, EvalExpression);
            }
            FindVal = StrFind(Loading, Translate("E"));
            if (FindVal == 0)
            {
              EvalExpression = StrConcat8(Loading, Translate(": "), Plate, Translate(" - "), Volume, Translate("uL"), Translate("\n"), Translate(""));
              EvalExpression = StrConcat2(Translate(" "), EvalExpression);
              FT_Cold = StrConcat2(FT_Cold, EvalExpression);
            }
          }
        }
      }
    }
    Len = StrGetLength(FT_Ambient);
    if (Len == 0)
    {
      FT_Ambient = 0;
    }
    Len = StrGetLength(FT_Cold);
    if (Len == 0)
    {
      FT_Cold = 0;
    }
    Len = StrGetLength(RR);
    if (Len == 0)
    {
      RR = 0;
    }
    Len = StrGetLength(CT);
    if (Len == 0)
    {
      CT = 0;
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "textBlock37.IsVisible", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock37.Text", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock40.Text", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock40.IsVisible", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock41.IsVisible", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock41.Text", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock42.IsVisible", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock38.IsVisible", FT_Cold );
    customDialog_1.SetCustomDialogProperty( "textBlock39.IsVisible", CT );
    customDialog_1.SetCustomDialogProperty( "textBlock46.IsVisible", RR );
    customDialog_1.SetCustomDialogProperty( "textBlock47.IsVisible", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock47.Text", FT_Ambient );
    customDialog_1.SetCustomDialogProperty( "textBlock1.IsVisible", Carrier5_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock1.Text", Carrier5_Pos1 );
    customDialog_1.SetCustomDialogProperty( "textBlock2.Text", Carrier5_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock2.IsVisible", Carrier5_Pos2 );
    customDialog_1.SetCustomDialogProperty( "textBlock3.IsVisible", Carrier5_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock3.Text", Carrier5_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock4.Text", Carrier5_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock4.IsVisible", Carrier5_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock5.Text", Carrier35_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock5.IsVisible", Carrier35_Pos3 );
    customDialog_1.SetCustomDialogProperty( "textBlock6.IsVisible", Carrier35_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock6.Text", Carrier35_Pos4 );
    customDialog_1.SetCustomDialogProperty( "textBlock7.IsVisible", Carrier35_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock7.Text", Carrier35_Pos5 );
    customDialog_1.SetCustomDialogProperty( "textBlock8.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock10.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock11.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock12.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock13.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock14.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock15.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock16.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock17.IsVisible", Tip50 );
    customDialog_1.SetCustomDialogProperty( "textBlock18.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock19.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock20.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock21.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock22.IsVisible", Tip300 );
    customDialog_1.SetCustomDialogProperty( "textBlock23.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock24.IsVisible", Tip1000 );
    customDialog_1.SetCustomDialogProperty( "textBlock26.IsVisible", MagneticRack );
    customDialog_1.SetCustomDialogProperty( "textBlock9.IsVisible", Tip50 );
    customDialog_1.ShowCustomDialog();
  }
} // library namespace
